PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'gender': "['man', 'woman', 'other']", 'age': '', 'estimated hours awake': "['1-3h', '4-6h', '7-9h', '10-12h', '13-15h', '16-18h', '19-21h', '22+h']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = bachelor
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Routines
  Routine trial
    TextComponent arithmetic
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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      text:
        Welcome to the experiment.
        In the following tasks, you will be tested on how cognition is affected by sleep.
    KeyboardComponent respone_intro
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = wecome
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  Routine task_1_instru
    TextComponent instr_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        TASK 1

        You will be presented with one noun at a time. Use your keyboard arrows to choose one of the words “THIS” or “THAT” to go along with the noun.
        There is no right or wrong answer, use your intuition.

        left arrow = THIS
        right arrow = THAT

        Press any key to start the task when you are ready
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start code
      Code Type = JS
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      Begin JS Experiment:
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        shuffle = util.shuffle;
  Routine task_2_instr
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        TASK 2

        In the next task, you will be presented some simple mathematical calculations. Your task is to determine wether the presented answer is correct or not. Respond with your keyboard arrows.

        Each calculation has a time limit of 5 seconds.

        left = YES
        right = NO

        You will first get 5 trial rounds to practice.

        Press space to start the trial
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mental_arithmetic
    TextComponent calculation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $Stimuli
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    KeyboardComponent key_resp_4
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent text_9
      color = 0.9216, 0.9216, 0.7255
      letterHeight = 0.07
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = YES         NO
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  Routine task_3_instr
  Routine task_3_instru
    TextComponent text_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        TASK 3

        The next task is a repetition of the first THIS-THAT task with new nouns.
        Use left and right arrows to answer

        Press space to proceed
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thisthat2
  Routine social_excl_instru
    TextComponent text_4
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Lastly, please read the following statements and rate them on how much they relate to you by pressing the corresponding number (1-7) on your keyboard.

        Press space to continue
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine social_excl
    TextComponent Questions
      letterHeight = 0.07
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question
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    TextComponent str_disagree
      letterHeight = 0.04
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = (Strongly disagree)
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    TextComponent agree
      letterHeight = 0.04
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = (Strongly agree)
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    TextComponent text_11
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1  2  3  4  5  6  7
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    KeyboardComponent key_resp_15
      allowedKeys = ('1','2','3','4','5','6','7')
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine debriefing
    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        DEBRIEFING

        You have now finished the experiment.

        This study is actually investigating brain plasticity and the effect of context of social and mental stress on feelings of connectedness.

        No data on your performance on the calculation task has been recorded, nor on your hours of wakefulness. The presented feedback on your performance was not reflective of your actual performance, but acted as a social stressor. You were assigned one of two conditions, manipulating the context of the stress.
        This-that responses aims to measure connectedness.

        Press space to go to the next screen
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    TextComponent Feedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Response
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  Routine neg_feedback
    TextComponent neg_feedB
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        TIME’S UP

        You answered 5 out of 15 correctly.

        Your performance is below 82%
        of all previous participants.


        Press any key to continue to round 2.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_2_letsgo
    TextComponent instruu
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        The real trial will now start. Try to complete the tasks as accurately and fast as possible.

        Press space to start the task when you are ready.
    KeyboardComponent keyrespp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mental_arit_practice
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text [set every repeat] = $Stimuli
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    KeyboardComponent key_resp_9
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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  Routine thisthat1
    TextComponent wordstimuli
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Noun
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    ButtonComponent thiss
      bold = True
      color = black
      fillColor = None
      forceEndRoutine = True
      letterHeight = 0.07
      pos = (-0.3, -0.2)
      size = (0.3,0.1)
      startVal [time (s)] = 0
      text = THIS
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    ButtonComponent thatt
      bold = True
      color = black
      fillColor = None
      forceEndRoutine = True
      letterHeight = 0.07
      pos = (0.3, -0.2)
      size = (0.3,0.1)
      startVal [time (s)] = 0
      text = THAT
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  Routine thisthat2_2
    ButtonComponent thisb
      bold = True
      callback = This
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = Click here
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    ButtonComponent thatb
      bold = True
      callback = That
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = Click here
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    TextComponent words
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Noun
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  Routine Mentalarit2
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $Stimuli
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    KeyboardComponent key_resp_10
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent text_10
      color = 0.9216, 0.9216, 0.7255
      letterHeight = 0.07
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = YES     NO
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  Routine feedback_2
    TextComponent resp
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Response
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  Routine test
  Routine THISTHAT
    TextComponent wordssss
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
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    KeyboardComponent key_resp_11
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent thisthat
      color = 0.9216, 0.9216, 0.7255
      letterHeight = 0.07
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
        THIS      THAT
  Routine THIS_THAT_2
    TextComponent nouns
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Word
    KeyboardComponent key_resp_12
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent thisthats
      color = 0.9216, 0.9216, 0.7255
      letterHeight = 0.07
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
        THIS      THAT
  Routine Welcome
    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Text
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    KeyboardComponent key_resp_13
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        import random
        coinflip = random.randint(0,1)
        if coinflip == 0:
            assignedGroup = "OrderA.csv"
        else:
            assignedGroup = "OrderB.csv"

        if coinflip == 0:
            assignedGrouptwo = "Order2A.csv"
        else:
            assignedGrouptwo = "Order2B.csv"
      Begin JS Experiment:
        coin_flip = Math.random();
        var assignedGroup;
        var assignedGrouptwo

        // pick one condition randomly
        if (coin_flip > .5) {
            assignedGroup = "OrderA.csv";
        } else {
            assignedGroup = "OrderB.csv";
        };

        // pick one condition randomly
        if (coin_flip > .5) {
            assignedGrouptwo = "Order2A.csv";
        } else {
            assignedGrouptwo = "Order2B.csv";
        };
  Routine Feedbackhalfway
    TextComponent text_8
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $Text
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine debrief2
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        I kindly ask you to not disclose any information about the contents of this experiment with others, as biased responses are non-favorable :)

        If you want more information, feel free to contact me on Facebook or at juliafkjunger@gmail.com.

        Thank you so much for participating in this experiment! :)

        Press any key to finish and exit
    KeyboardComponent key_resp_16
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Consent
    TextComponent text_13
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        In the following five tasks, you will be tested on the effect of sleep on cognition. You are at any time allowed to withdraw your consent by pressing ‘esc’. When you submit your answers at the end of the experiment your data is fully anonymized and you can at that point not withdraw your consent as your specific data cannot be found.

        If you give your consent, press ‘y’ to proceed.
        If you wish to exit, press ‘esc’
    KeyboardComponent key_resp_17
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Consent
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = $assignedGroup
    loopType = random
    nReps = 1
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    Routine Welcome
  LoopTerminator trials_5
  Routine task_1_instru
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = Wordlist1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('X', 70), ('Word', 'butterfly'), ('Vision', 1.88353084177968), ('Valence', -0.901256724605949), ('Loudness', -0.858131626841118), ('Human', 0.478140003961177), ('TasteSmell', -1.10616146744451), ('Motion', 1.89111427647553), ('Manipulability', -0.819811760236439), ('Scene', -0.884239923075411), ('Time', 0.0824438387373945), ('TorsoLegs', -1.48251701551023), ('Arousal', 2.5249336792358), ('Self', -0.485746561551678), ('type', 'animals'), ('factor', 1)]),
      OrderedDict([('X', 344), ('Word', 'penguin'), ('Vision', 1.85617372446176), ('Valence', -0.804335583630721), ('Loudness', 0.233006116897832), ('Human', 0.733003322474151), ('TasteSmell', -1.04581075777105), ('Motion', 0.194103173803278), ('Manipulability', -1.49506334241617), ('Scene', -0.231986196787657), ('Time', -0.408961714296056), ('TorsoLegs', -0.893823137018075), ('Arousal', 0.646508832224018), ('Self', -0.775100055769571), ('type', 'animals'), ('factor', 1)]),
      OrderedDict([('X', 10), ('Word', 'alligator'), ('Vision', 1.85389228348167), ('Valence', 2.12394138702954), ('Loudness', 0.100998925519343), ('Human', 0.238624014465718), ('TasteSmell', 0.31363640676798), ('Motion', 1.13512465810513), ('Manipulability', -0.650846555525917), ('Scene', 0.586470803392049), ('Time', -0.907961703953524), ('TorsoLegs', -0.849096932467257), ('Arousal', 0.929984898687443), ('Self', -0.00769938631855921), ('type', 'animals'), ('factor', 1)]),
      OrderedDict([('X', 125), ('Word', 'dandelion'), ('Vision', 1.84388517652705), ('Valence', -0.537904136809681), ('Loudness', -1.00730784703979), ('Human', -0.177310134446994), ('TasteSmell', -0.498520928436604), ('Motion', -0.625387252913905), ('Manipulability', -0.00412468009723479), ('Scene', -0.274021975538201), ('Time', 0.234461914515598), ('TorsoLegs', -1.09432564513671), ('Arousal', 1.53607998254866), ('Self', -0.739337452050648), ('type', 'animals'), ('factor', 1)])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
    Routine THISTHAT
  LoopTerminator trials_6
  Routine task_2_instr
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = mentalartimeticpractice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Arit', '5 x 5 - 17 = ?')]),
      OrderedDict([('Arit', '10 - 18 + 11 = ?')]),
      OrderedDict([('Arit', '67 - 50 - 16 = ?')]),
      OrderedDict([('Arit', '90 - 22 x 4 = ?')]),
      OrderedDict([('Arit', '11 + 3 - 7 = ?')])]
    Routine mental_arit_practice
  LoopTerminator trials_2
  Routine task_2_letsgo
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Mentalarit1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Stimuli', '2 - 15 + 39 = 27?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '45 x 3 + 12 = 147?'), ('Response', 'SPEED UP'), ('Congr', 1), ('RightAns', 'left')]),
      OrderedDict([('Stimuli', '72 + 17 x 3 = 121?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '6 - 58 + 11 = -41?'), ('Response', None), ('Congr', 1), ('RightAns', 'left')]),
      OrderedDict([('Stimuli', '14 x 2 + 10 = 38?'), ('Response', None), ('Congr', 1), ('RightAns', 'left')]),
      OrderedDict([('Stimuli', '54 + 60 - 1 = 113?'), ('Response', 'PAY ATTENTION'), ('Congr', 1), ('RightAns', 'left')]),
      OrderedDict([('Stimuli', '7 + 70 x 3 = 219?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '5 x 5 - 29 = -40?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '54 - 40 x -2 = - 27?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '7 x 11 - 21 = 56?'), ('Response', 'SPEED UP'), ('Congr', 1), ('RightAns', 'left')]),
      OrderedDict([('Stimuli', '35 - 66 - 20 = - 55?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '47 + 13 - 7 = 53?'), ('Response', None), ('Congr', 1), ('RightAns', 'left')]),
      OrderedDict([('Stimuli', '53 + 7 x 7 = 150?'), ('Response', 'YOU’RE NOT TRYING HARD ENOUGH'), ('Congr', 0), ('RightAns', 'right')])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
    Routine mental_arithmetic
    Routine feedback
  LoopTerminator trials
  Routine neg_feedback
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = Mentalarit2.2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Stimuli', '17 x 2 - 10 = 24?'), ('Response', None), ('Congr', 1), ('RightAns', 'left')]),
      OrderedDict([('Stimuli', '56 - 6 x 3 = 33?'), ('Response', 'SPEED UP'), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '19 x 40 + 10 = 831?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '6 - 13 + 4 = -3?'), ('Response', None), ('Congr', 1), ('RightAns', 'left')]),
      OrderedDict([('Stimuli', '7 + 46 + 16 = 67?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '33 - 15 - 49 = -40?'), ('Response', 'WRONG AGAIN.'), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '12 + 13 x 4 = 70?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '7 - 8 - 9 = -11?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '62 - 15 x 3 = 5?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '7 x 11 - 21 = 56?'), ('Response', 'GO FASTER'), ('Congr', 1), ('RightAns', 'left')]),
      OrderedDict([('Stimuli', '10 x 11 + 45 = 155?'), ('Response', None), ('Congr', 1), ('RightAns', 'left')]),
      OrderedDict([('Stimuli', '27 x 2 - 77 = -24?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '13 x 3 + 2 = 90?'), ('Response', None), ('Congr', 0), ('RightAns', 'right')]),
      OrderedDict([('Stimuli', '55 - 66 + 14 = 3?'), ('Response', None), ('Congr', 1), ('RightAns', 'left')])]
    Routine Mentalarit2
    Routine feedback_2
  LoopTerminator trials_4
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = $assignedGrouptwo
    loopType = random
    nReps = 1
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    Routine Feedbackhalfway
  LoopTerminator trials_7
  Routine task_3_instru
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Wordlist2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('X', 315), ('Word', 'mouth'), ('Vision', 0.687039204876003), ('Valence', 0.133204658888374), ('Loudness', 1.6411954826393), ('Human', 1.45210495013159), ('TasteSmell', 1.36860844960893), ('Motion', -0.0938998681564439), ('Manipulability', 0.114340899093847), ('Scene', -0.225116678049611), ('Time', -0.431269340727133), ('TorsoLegs', -1.55688678695402), ('Arousal', -1.34145927488042), ('Self', 4.02815402519097), ('type', 'self'), ('factor', 1)]),
      OrderedDict([('X', 324), ('Word', 'nose'), ('Vision', 1.56314488978993), ('Valence', 0.151945917902418), ('Loudness', 0.543934884383805), ('Human', 0.385157149127848), ('TasteSmell', -0.292121543510491), ('Motion', -1.05351163198778), ('Manipulability', 0.583051528798509), ('Scene', -0.302671123812616), ('Time', -0.0136023828835657), ('TorsoLegs', -0.83376400830897), ('Arousal', -0.846865390549726), ('Self', 3.65911768704888), ('type', 'self'), ('factor', 1)]),
      OrderedDict([('X', 283), ('Word', 'lip'), ('Vision', 0.81689922036489), ('Valence', -0.148844434959221), ('Loudness', 0.863210575018895), ('Human', 0.898733401739727), ('TasteSmell', 0.780257620891836), ('Motion', 0.0352059860250045), ('Manipulability', 0.264973948982381), ('Scene', -0.429486693727186), ('Time', -0.185490150997475), ('TorsoLegs', -1.78040779322691), ('Arousal', -0.719009495888411), ('Self', 3.51729137295379), ('type', 'self'), ('factor', 1)]),
      OrderedDict([('X', 171), ('Word', 'eye'), ('Vision', 1.24447912049614), ('Valence', 0.00256011028710394), ('Loudness', -0.448355739607908), ('Human', 0.785731322947673), ('TasteSmell', -0.625492105414492), ('Motion', 0.45262857116811), ('Manipulability', -0.0957455958695539), ('Scene', -0.0794934226923193), ('Time', -0.0738231040905731), ('TorsoLegs', -2.00849034145294), ('Arousal', 0.668088001899117), ('Self', 3.51703605136761), ('type', 'self'), ('factor', 1)])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
    Routine THIS_THAT_2
  LoopTerminator trials_3
  Routine social_excl_instru
  LoopInitiator socialexc loopType="TrialHandler"
    conditionsFile = social_exc.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Question', 'I felt excluded during the experiment.')]),
      OrderedDict([('Question', 'Negative feedback showed me that I had lower task competencies than the other participants.')]),
      OrderedDict([('Question', 'I felt alone during the experiment.')]),
      OrderedDict([('Question', 'I felt stressed during the experiment.')])]
    Routine social_excl
  LoopTerminator socialexc
  Routine debriefing
  Routine debrief2
